CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (directory doesnot containregexp "[\\\\/]\\.")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^r(?P<Row>..)c(?P<Column>..)f(?P<Field>..)ch(?P<Channel>.)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "1")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "2")
    Name to assign these images:Tubulin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "3")
    Name to assign these images:Protein
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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
    Operation:Log transform (base 2)
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:LogDNA
    Image or measurement?:Image
    Select the first image:DNA
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:6|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
    Operation:Log transform (base 2)
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:LogProtein
    Image or measurement?:Image
    Select the first image:Protein
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:7|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
    Operation:Log transform (base 2)
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:LogTubulin
    Image or measurement?:Image
    Select the first image:Tubulin
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:LogDNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):30,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifySecondaryObjects:[module_num:9|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:LogTubulin
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureObjectIntensity:[module_num:10|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
    Select images to measure:LogDNA, LogProtein, LogTubulin
    Select objects to measure:Cells, Nuclei

MeasureObjectSizeShape:[module_num:11|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
    Select object sets to measure:Cells, Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureImageAreaOccupied:[module_num:12|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
    Measure the area occupied by:Objects
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    Select object sets to measure:Cells

ExportToAnnData:[module_num:13|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
    Output file location:Default Input Folder sub-folder|Documents/Tests/scverse-cp-hackathon-2026
    File name prefix:Testrun_cp2sd_2ad
    Also write one file per object?:No
    When an object is not exactly one primary + one secondary + one tertiary:Flag
    How to pick primary / secondary / tertiary objects:Automatic
    Primary objects (e.g. nuclei):None
    Secondary objects (e.g. cells):None
    Tertiary objects (e.g. cytoplasm):None
    Overwrite existing files without warning?:Yes

ExportToSpreadsheet:[module_num:14|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Documents/Tests/scverse-cp-hackathon-2026
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|ExecutionTime_10MeasureObjectIntensity,Image|ExecutionTime_12MeasureImageAreaOccupied,Image|ExecutionTime_03NamesAndTypes,Image|ExecutionTime_04Groups,Image|ExecutionTime_07ImageMath,Image|ExecutionTime_02Metadata,Image|ExecutionTime_06ImageMath,Image|ExecutionTime_09IdentifySecondaryObjects,Image|ExecutionTime_01Images,Image|ExecutionTime_08IdentifyPrimaryObjects,Image|ExecutionTime_11MeasureObjectSizeShape,Image|ExecutionTime_05ImageMath,Image|Threshold_WeightedVariance_Nuclei,Image|Threshold_WeightedVariance_Cells,Image|Threshold_SumOfEntropies_Nuclei,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Testrun_cp2sd_
    Overwrite existing files without warning?:No
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:Yes
    File name:DATA.csv
    Use the object name for the file name?:No

CreateBatchFiles:[module_num:15|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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:/Users/lvulliard
    Cluster root path:/Users/lvulliard
